PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = creatingimagesNEW
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Welcome_Page
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    TextComponent textWelcomePage
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Thank you for participating in this experiment. Please read the instructions before beginning.

        Instructions:
        You will be presented with a variety of shapes. Your task is to choose the triangle. You will not be able to move on to the next slide unless you correctly choose the triangle with your mouse. Once you begin the experiment you will not be able to leave until you have successfully completed all tasks. This experiment will take approximately 5 minutes.

        PLEASE PRESS THE SPACE BAR TO BEGIN THE EXPERIMENT
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine End_Routine
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    TextComponent End_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for completing the experiment! Please press the SPACE BAR to exit the program. 
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine builder_attempt
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        #Caroline coded lines 6-90.
        #Sets circle1 position.
        if triangle_pos != (0, 0.25):
            circle1_pos = (0, 0.25)
        else:
            circle1_pos = (0.1875, 0.1875)

        #Sets circle2 position.
        if triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle2_pos = (0.1875, 0.1875)
        else:
            circle2_pos = (0.25, 0)

        #Sets circle3 position.
        if triangle_pos != (0.25, 0) and triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle3_pos = (0.25, 0)
        else:
            circle3_pos = (0.1875, -0.1875)

        #Sets circle4 position.
        if triangle_pos == (0, -0.25) or triangle_pos == (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle4_pos = (0.1875, -0.1875)
        else:
            circle4_pos = (0, -0.25)

        #Sets circle5 position.
        if triangle_pos== (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle5_pos = (0, -0.25)
        else:
            circle5_pos = (-0.1875, -0.1875)

        #Sets circle6 position.
        if triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle6_pos = (-0.1875, -0.1875)
        else:
            circle6_pos = (-0.25, 0)

        #Sets circle7 position.
        if triangle_pos == (-0.1875, 0.1875):
            circle7_pos = (-0.25, 0)
        else:
            circle7_pos = (-0.1875, 0.1875)

        #Sets the triangle color.
        if triangle_color == 'g':
            triangle1_color = [-0.6078, 0.6708, -0.6708]
        else:
            triangle1_color = [1.0000, -1.0000, 1.0000]

        #Sets the circle colors - all green except if the position matches pink_circle_pos.
        #Then it is set to pink.
        if circle1_pos == pink_circle_pos:
            circle1_color = [1.0000, -1.0000, 1.0000]
        else:
            circle1_color = [-0.6078, 0.6708, -0.6708]

        if circle2_pos == pink_circle_pos:
            circle2_color = [1.0000, -1.0000, 1.0000]
        else:
            circle2_color = [-0.6078, 0.6708, -0.6708]

        if circle3_pos == pink_circle_pos:
            circle3_color = [1.0000, -1.0000, 1.0000]
        else:
            circle3_color = [-0.6078, 0.6708, -0.6708]

        if circle4_pos == pink_circle_pos:
            circle4_color = [1.0000, -1.0000, 1.0000]
        else:
            circle4_color = [-0.6078, 0.6708, -0.6708]

        if circle5_pos == pink_circle_pos:
            circle5_color = [1.0000, -1.0000, 1.0000]
        else:
            circle5_color = [-0.6078, 0.6708, -0.6708]

        if circle6_pos == pink_circle_pos:
            circle6_color = [1.0000, -1.0000, 1.0000]
        else:
            circle6_color = [-0.6078, 0.6708, -0.6708]

        if circle7_pos == pink_circle_pos:
            circle7_color = [1.0000, -1.0000, 1.0000]
        else:
            circle7_color = [-0.6078, 0.6708, -0.6708]

        #Garv coded.
        mouse.setPos(0)
    PolygonComponent circle1
      fillColor [set every repeat] = $circle1_color
      lineColor [set every repeat] = $circle1_color
      pos [set every repeat] = $circle1_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
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    PolygonComponent circle2
      fillColor [set every repeat] = $circle2_color
      lineColor [set every repeat] = $circle2_color
      pos [set every repeat] = $circle2_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent circle3
      fillColor [set every repeat] = $circle3_color
      lineColor [set every repeat] = $circle3_color
      pos [set every repeat] = $circle3_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent circle4
      fillColor [set every repeat] = $circle4_color
      lineColor [set every repeat] = $circle4_color
      pos [set every repeat] = $circle4_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent circle5
      fillColor [set every repeat] = $circle5_color
      lineColor [set every repeat] = $circle5_color
      pos [set every repeat] = $circle5_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent circle6
      fillColor [set every repeat] = $circle6_color
      lineColor [set every repeat] = $circle6_color
      pos [set every repeat] = $circle6_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent circle7
      fillColor [set every repeat] = $circle7_color
      lineColor [set every repeat] = $circle7_color
      pos [set every repeat] = $circle7_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    PolygonComponent triangle1
      fillColor [set every repeat] = $triangle1_color
      lineColor [set every repeat] = $triangle1_color
      pos [set every repeat] = $triangle_pos
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    MouseComponent mouse
      clickable = [triangle1]
      correctAns = triangle1
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine coder_attempt2
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        fixation_square = visual.Polygon (win = win, edges = 4, radius = 0.1, pos = (0,0), size = 0.1, fillColor = [1, 1, 1], fillColorSpace = 'rgb', ori=90.0)
        fixation_square.draw()
        win.update()
        core.wait (0.2)

        mouse = event.Mouse(win = win)
        mouse.mouseClock = core.Clock()
        #Sets circle1 position.
        if triangle_pos != (0, 0.25):
            circle1_pos = (0, 0.25)
        else:
            circle1_pos = (0.1875, 0.1875)

        #Sets circle2 position.
        if triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle2_pos = (0.1875, 0.1875)
        else:
            circle2_pos = (0.25, 0)

        #Sets circle3 position.
        if triangle_pos != (0.25, 0) and triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle3_pos = (0.25, 0)
        else:
            circle3_pos = (0.1875, -0.1875)

        #Sets circle4 position.
        if triangle_pos == (0, -0.25) or triangle_pos == (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle4_pos = (0.1875, -0.1875)
        else:
            circle4_pos = (0, -0.25)

        #Sets circle5 position.
        if triangle_pos== (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle5_pos = (0, -0.25)
        else:
            circle5_pos = (-0.1875, -0.1875)

        #Sets circle6 position.
        if triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle6_pos = (-0.1875, -0.1875)
        else:
            circle6_pos = (-0.25, 0)

        #Sets circle7 position.
        if triangle_pos == (-0.1875, 0.1875):
            circle7_pos = (-0.25, 0)
        else:
            circle7_pos = (-0.1875, 0.1875)

        #Sets the triangle color.
        if triangle_color == 'g':
            triangle1_color = [-0.6078, 0.6708, -0.6708]
        else:
            triangle1_color = [1.0000, -1.0000, 1.0000]

        #Sets the circle colors - all green except if the position matches pink_circle_pos.
        #Then it is set to pink.

        circle1_color = []
        circle2_color = []
        circle3_color = []
        circle4_color = []
        circle5_color = []
        circle6_color = []
        circle7_color = []

        circle_positions = [circle1_pos, circle2_pos, circle3_pos, circle4_pos, circle5_pos, circle6_pos, circle7_pos]
        circle_colors = [circle1_color, circle2_color, circle3_color, circle4_color, circle5_color, circle6_color, circle7_color]

        for ii in range (len (circle_colors)):
            if circle_positions [ii] == pink_circle_pos:
                circle_colors[ii] = [1.0000, -1.0000, 1.0000]
            else:
                circle_colors[ii] = [-0.6708, 0.6708, -0.6708]

        for ii in range (len(circle_colors)):
            circles = visual.Circle (win = win, edges = 'circle', pos = circle_positions[ii], size = 0.1, fillColor = circle_colors[ii], fillColorSpace = 'rgb')
            circles.draw()
        triangle1 = visual.Polygon (win = win, edges = 3, pos = triangle_pos, size = 0.125, fillColor = triangle1_color, lineColor = triangle1_color, fillColorSpace = 'rgb', lineColorSpace = 'rgb')
        triangle1.draw()
        win.update()
        while triangle1.contains(mouse) == False:
            core.wait (1)

        if triangle1.contains(mouse) == True:
            continueRoutine = False
  Routine test_trial
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    CodeComponent test_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # Garv's Code
        # Had to do some research on data types as that was causing
        #some problems with the code. Used loops to implement the code.
        import ast

        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()
        fixation_square = visual.Polygon(win = win, edges = 4, radius = 0.1, pos = (0,0), size = 0.3, fillColor = [1, 1, 1], fillColorSpace = 'rgb', ori=90.0)
        fixation_square.draw()
        core.wait(0.2)
        win.update()
        mouse = event.Mouse(win = win)
        mouse.mouseClock = core.Clock()
        mouse.setPos(0)

        circlepos = [(0,0.25), (0.1875, 0.1875), (0.25, 0), (0.1875, -0.1875), (0, -0.25), (-0.1875, -0.1875), (-0.25, 0), (-0.1875, 0.1875)]
        triangle_pos_tuple = tuple(ast.literal_eval(triangle_pos)) # Codes for converting the triangle_pos value stored as a string into a tuple.
        if red_circle_pos == '0' or red_circle_pos == 0.0:
            red_circle_pos_tuple = 0
        else:
            red_circle_pos_tuple = tuple(ast.literal_eval(red_circle_pos))
        if blue_circle_pos == '0' or blue_circle_pos == 0.0:
            blue_circle_pos_tuple = 0
        else:
            blue_circle_pos_tuple = tuple(ast.literal_eval(blue_circle_pos))

        circlepos.remove(triangle_pos_tuple)

        if triangle_color == 'g':
            triangle1 = visual.Polygon(win = win, edges = 3, pos = triangle_pos_tuple, size = 0.125, fillColor = [-0.5833, 0.3402, -0.7333], lineColor = [-0.5833, 0.3402, -0.7333], fillColorSpace = 'rgb', lineColorSpace = 'rgb')
        elif triangle_color == 'b':
            triangle1 = visual.Polygon(win = win, edges = 3, pos = triangle_pos_tuple, size = 0.125, fillColor = [-1.0000, 0.0039, 0.0039], lineColor = [-1.0000, 0.0039, 0.0039], fillColorSpace = 'rgb', lineColorSpace = 'rgb')
        else:
            triangle1 = visual.Polygon(win = win, edges = 3, pos = triangle_pos_tuple, size = 0.125, fillColor = [1.0000, -1.0000, -1.0000], lineColor = [1.0000, -1.0000, -1.0000], fillColorSpace = 'rgb', lineColorSpace = 'rgb')
        triangle1.draw()


        for i in circlepos:
            if red_circle_pos_tuple == i:
                circle = visual.Circle(win = win, edges = 'circle', pos = i, size = 0.1, fillColor = [1.0000, -1.0000, -1.0000], fillColorSpace = 'rgb')
            elif blue_circle_pos_tuple == i:
                circle = visual.Circle(win = win, edges = 'circle', pos = i, size = 0.1, fillColor = [-1.0000, 0.0039, 0.0039], fillColorSpace = 'rgb')
            else:
                circle = visual.Circle(win = win, edges = 'circle', pos = i, size = 0.1, fillColor = [-0.5833, 0.3402, -0.7333], fillColorSpace = 'rgb')
            circle.draw()

        fixation_square.draw()
        win.update()
        while triangle1.contains(mouse) == False:
            core.wait(0.1)
        continueRoutine = False
  Routine Test_Trial_routine_instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following images will serve as test trials so that you can get accustomed to how the actual trials will proceed. Please note that once you begin, it is advised that you do not exit the program at any point in time.

        Please press the SPACE BAR to continue to the test trials.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Actual_Trial_Instructions
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    TextComponent actual_trial_intructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulations on competing the trial! You will now begin the actual experiment. Try your best to choose the triangle in as little time as possible. For proper data collection, it is advised that you do not exit the trial once it begins.

        Please press the SPACE BAR to continue to the trial.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Real_Trials
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    CodeComponent real_trials_code
      Code Type = Py
      Begin Routine:
        #Garv coded.
        mouse.setPos(0)

        #Caroline coded lines 4-119. 27.5 hours.
        #Creates a fixation square that resets every trial - to avoid biases.
        fixation_square = visual.Polygon (win = win, edges = 4, radius = 0.1, pos = (0,0), size = 0.3, fillColor = [1, 1, 1], fillColorSpace = 'rgb', ori=90.0)
        fixation_square.draw()
        win.update()
        #Lasts for 0.2 seconds before circles/triangle appears.
        core.wait (0.2)

        #Creates the mouse.
        mouse = event.Mouse(win = win)
        mouse.mouseClock = core.Clock()

        #Sets circle1 position.
        #All of the code reflects the following methodology.
        #If the triangle is in the top position, the first circle is in the second position.
        #In all other cases, the first circle is in the first position.
        if triangle_pos != (0, 0.25):
            circle1_pos = (0, 0.25)
        else:
            circle1_pos = (0.1875, 0.1875)

        #Sets circle2 position.
        #Circle 2 is affected by the triangle being in position 1 or position 2 (This increases for every subsequent circle).
        if triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle2_pos = (0.1875, 0.1875)
        else:
            circle2_pos = (0.25, 0)

        #Sets circle3 position.
        if triangle_pos != (0.25, 0) and triangle_pos != (0.1875, 0.1875) and triangle_pos != (0, 0.25):
            circle3_pos = (0.25, 0)
        else:
            circle3_pos = (0.1875, -0.1875)

        #Sets circle4 position.
        if triangle_pos == (0, -0.25) or triangle_pos == (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle4_pos = (0.1875, -0.1875)
        else:
            circle4_pos = (0, -0.25)

        #Sets circle5 position.
        if triangle_pos== (-0.1875, -0.1875) or triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle5_pos = (0, -0.25)
        else:
            circle5_pos = (-0.1875, -0.1875)

        #Sets circle6 position.
        if triangle_pos == (-0.25, 0) or triangle_pos == (-0.1875, 0.1875):
            circle6_pos = (-0.1875, -0.1875)
        else:
            circle6_pos = (-0.25, 0)

        #Sets circle7 position.
        if triangle_pos == (-0.1875, 0.1875):
            circle7_pos = (-0.25, 0)
        else:
            circle7_pos = (-0.1875, 0.1875)

        #Sets the triangle color.
        if triangle_color == 'g':
            triangle1_color = [-0.5833, 0.3402, -0.7333]
        elif triangle_color == 'r':
            triangle1_color = [1.0000, -1.0000, -1.0000]
        else:
            triangle1_color = [-1.0000, 0.0039, 0.0039]

        #Sets the circle colors - all green except if the position matches red_circle_pos or blue_circle_pos.
        #Then it is set to red or blue, respectively.

        circle1_color = []
        circle2_color = []
        circle3_color = []
        circle4_color = []
        circle5_color = []
        circle6_color = []
        circle7_color = []

        circle_positions = [circle1_pos, circle2_pos, circle3_pos, circle4_pos, circle5_pos, circle6_pos, circle7_pos]
        circle_colors = [circle1_color, circle2_color, circle3_color, circle4_color, circle5_color, circle6_color, circle7_color]

        #Iterates through the different circle colors.
        for ii in range (len (circle_colors)):
            #If the circle is at the red position, it is red.
            if circle_positions [ii] == red_circle_pos:
                circle_colors[ii] = [1.0000, -1.0000, -1.0000]
            #If it is at the blue position, it is blue.
            elif circle_positions [ii] == blue_circle_pos:
                circle_colors[ii] = [-1.0000, 0.0039, 0.0039]
            #If it is not at the red or blue position (or if all the circles in the trial are green), the circle is green.
            else:
                circle_colors[ii] = [-0.5833, 0.3402, -0.7333]

        #Draws each of the circles.
        for ii in range (len(circle_colors)):
            circles = visual.Circle (win = win, edges = 'circle', pos = circle_positions[ii], size = 0.1, fillColor = circle_colors[ii], fillColorSpace = 'rgb')
            circles.draw()
        #Draws the triangle.
        triangle1 = visual.Polygon (win = win, edges = 3, pos = triangle_pos, size = 0.125, fillColor = triangle1_color, lineColor = triangle1_color, fillColorSpace = 'rgb', lineColorSpace = 'rgb')
        triangle1.draw()
        #Draws the fixation square with it - so it appears as a constant.
        fixation_square.draw()
        win.update()

        #The image won't end until the mouse hovers over the triangle. Continuous loop until broken.
        while triangle1.contains(mouse) == False:
            core.wait(0.05) # I changed the core wait time to be lower so that the delay is lower.

        #The routine will end/advance to the next image once the mouse hovers over the triangle.
        if triangle1.contains(mouse) == True:
            continueRoutine = False

        #Use escape key to leave experiment early.
        #https://discourse.psychopy.org/t/escape-key-code/21020
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()
Flow
  Routine Welcome_Page
  Routine Test_Trial_routine_instructions
  LoopInitiator test_trial_before_experiment loopType="TrialHandler"
    conditionsFile = C:/Users/prami/OneDrive/Desktop/ConditionsSpreadSheet_test_trial_data_v2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('triangle_pos', '(0, 0.25)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0.1875, 0.1875)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0.25, 0)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0.1875, -0.1875)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0, -0.25)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-0.1875, -0.1875)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-0.25, 0)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-0.1875, 0.1875)'), ('triangle_color', 'g'), ('red_circle_pos', 0.0), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0, 0.25)'), ('triangle_color', 'g'), ('red_circle_pos', '(-0.1875, -0.1875)'), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0.1875, 0.1875)'), ('triangle_color', 'g'), ('red_circle_pos', '(0, -0.25)'), ('blue_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0.25, 0)'), ('triangle_color', 'g'), ('red_circle_pos', '(-0.1875, 0.1875)'), ('blue_circle_pos', 0.0)])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
    Routine test_trial
  LoopTerminator test_trial_before_experiment
  Routine Actual_Trial_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ConditionsSpreadSheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'triangle_pos': (0, 0.25), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.1875, 0.1875), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.25, 0), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.1875, -0.1875), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (0, -0.25), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (-0.1875, -0.1875), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (-0.25, 0), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (-0.1875, 0.1875), 'triangle_color': 'g', 'red_circle_pos': 0.0, 'blue_circle_pos': 0.0},
      {'triangle_pos': (0, 0.25), 'triangle_color': 'g', 'red_circle_pos': (-0.1875, -0.1875), 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.1875, 0.1875), 'triangle_color': 'g', 'red_circle_pos': (0, -0.25), 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.25, 0), 'triangle_color': 'g', 'red_circle_pos': (-0.1875, 0.1875), 'blue_circle_pos': 0.0},
      {'triangle_pos': (0.1875, -0.1875), 'triangle_color': 'g', 'red_circle_pos': (-0.25, 0), 'blue_circle_pos': 0.0},
      {'triangle_pos': (0, -0.25), 'triangle_color': 'g', 'red_circle_pos': (0.1875, 0.1875), 'blue_circle_pos': 0.0},
      {'triangle_pos': (-0.1875, -0.1875), 'triangle_color': 'g', 'red_circle_pos': (0, 0.25), 'blue_circle_pos': 0.0}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
    Routine Real_Trials
  LoopTerminator trials
  Routine End_Routine
