PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 800]
  color = $[-1, -1, -1]
  expName = searchArrayTrial
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine WelcomePage
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    TextComponent textWelcomeMessage
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Thank you for participating in this experiment. Please read the instructions before beginning.

        Instructions:
        You will be presented with a variety of shapes. Your task is to choose the rhombus. You will not be able to move on to the next slide unless you correctly choose the rhombus with your mouse. Once you begin the experiment you will not be able to leave until you have successfully completed all tasks. This experiment will take approximately 5-10 minutes.

        PLEASE PRESS THE SPACE BAR TO BEGIN THE EXPERIMENT
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be 15 images.

        Using your mouse, select the rhombus in each image.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image1_1
    RoutineSettingsComponent image1_1
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_2
    RoutineSettingsComponent image1_2
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_2
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_3
    RoutineSettingsComponent image1_3
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_3
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image2_1
    RoutineSettingsComponent image2_1
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent pinkcircle
      fillColor = 1.0000, -1.0000, 1.0000
      lineColor = 1.0000, -1.0000, 1.0000
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image3_1
    RoutineSettingsComponent image3_1
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent pinktriangle
      fillColor = 1.0000, -1.0000, 1.0000
      lineColor = 1.0000, -1.0000, 1.0000
      pos = (0.1875, -.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_4
    RoutineSettingsComponent image1_4
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_4
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_5
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_5
    RoutineSettingsComponent image1_5
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_6
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_6
    RoutineSettingsComponent image1_6
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_7
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_7
    RoutineSettingsComponent image1_7
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_8
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_8
    RoutineSettingsComponent image1_8
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_9
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_9
    RoutineSettingsComponent image1_9
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_10
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine image1_10
    RoutineSettingsComponent image1_10
      stopVal [duration (s)] = 1
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    PolygonComponent greencircle1_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle2_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, -.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle3_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle4_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.1875, 0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle5_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.25, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle6_12
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (-0.1875, -0.1875)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greencircle7_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0.0, 0.25)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent greentriangle_11
      fillColor = -0.1608, 0.1137, -0.7255
      lineColor = -0.1608, 0.1137, -0.7255
      pos = (0, -.25)
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomePage
  Routine Instructions
  Routine image1_1
  Routine image1_2
  Routine image1_3
  Routine image1_4
  Routine image1_5
  Routine image1_6
  Routine image1_7
  Routine image1_8
  Routine image1_9
  Routine image1_10
  Routine image2_1
  Routine image3_1
