PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test2_run
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        xvalues_range = [0, 3, 4, 3, 0, -3, -4, -3]
        yvalues_range = [4, 3, 0, -3, -4, -3, 0, 3]

        possible_positions = [(0, 4), (3, 3), (4, 0), (3, -3), (0, -4), (-3, -3), (-4, 0), (-3, 3)]

        for ii in possible_positions:
            if ii == triangle_pos:
                triangle1 = visual.Polygon(win = mywin, edges=3, radius=1.25, colorSpace = 'rgb', pos=ii)
                if triangle_color == 'g':
                    triangle1.color = (0, 255, 0)
                else:
                    triangle1.color = (255, 0, 0)
                triangle1.draw()
            else:
                circle1 = visual.Circle (win = mywin, radius= 1, edges='circle', colorSpace = 'rgb', pos=ii)
                if ii == pink_circle_pos:
                    circle1.color (255, 0, 0)
                else:
                    circle1.color (0, 255, 0)
                circle1.draw()
            mywin.update()
      Each Frame:
        mouse_clicked = psychopy.event.Mouse(visible=True, newPos=[0,0], win=None)

        correct_answer = triangle1
        if mouse.isPressedIn(triangle1):
            continueRoutine = False

        #if mouse_clicked == correct_answer:
            # go to the next slide
            # store the time it takes for the user to click the correct object
  Routine Instruction_Page
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event, clock
        from psychopy.hardware import keyboard

        mywin = visual.Window ([600, 600], monitor = "testMonitor", units = "deg", color = [-1, -1, -1])

        text_msg = visual.TextStim(win = mywin, text='Welcome to the experiment. Choose the triangle in the following images. Press the space bar to begin.')
        text_msg.draw()
        mywin.update()
        instruction_msg_time = event.waitKeys (keyList = ['space'])
  Routine routine_1
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        xvalues_range = [0, 3, 4, 3, 0, -3, -4, -3]
        yvalues_range = [4, 3, 0, -3, -4, -3, 0, 3]
        for jj in range (8):
            if xvalues_range [jj] == 0 and yvalues_range [jj] == 4:
               triangle1 = visual.Polygon(win = mywin, edges=3, radius=1.25, fillColor=[0, 255, 0], lineColor = [0, 255, 0], colorSpace = 'rgb', pos=(xvalues_range [jj], yvalues_range [jj]))
               triangle1.draw()
            else:
               circle1 = visual.Circle (win = mywin, radius= 1, edges='circle', fillColor= [0, 255, 0], colorSpace = 'rgb', pos=(xvalues_range [jj], yvalues_range [jj]))
               circle1.setAutoDraw(True)
  Routine End_Page
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual, core, event, clock
        from psychopy.hardware import keyboard

        mywin = visual.Window ([600, 600], monitor = "testMonitor", units = "deg", color = [-1, -1, -1])

        text_msg = visual.TextStim(win = mywin, text='Thank you for participating in this experiment. Please press Enter to exit the Window. ')
        text_msg.draw()
        mywin.update()
        instruction_msg_time = event.waitKeys (keyList = ['return'])
Flow
  Routine routine_1
  Routine Instruction_Page
  LoopInitiator trials24 loopType="TrialHandler"
    conditionsFile = /Users/carolineobrien/Downloads/Conditions Spreadsheet.xlsx
    loopType = random
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    conditions:
      [{'triangle_pos': (0, 4), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, 3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (4, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, -3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, -4), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-3, -3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-4, 0), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (-3, 3), 'triangle_color': 'g', 'pink_circle_pos': 0.0},
      {'triangle_pos': (0, 4), 'triangle_color': 'g', 'pink_circle_pos': (-3, -3)},
      {'triangle_pos': (3, 3), 'triangle_color': 'g', 'pink_circle_pos': (0, -4)},
      {'triangle_pos': (4, 0), 'triangle_color': 'g', 'pink_circle_pos': (0, 4)},
      {'triangle_pos': (3, -3), 'triangle_color': 'g', 'pink_circle_pos': (4, 0)},
      {'triangle_pos': (0, -4), 'triangle_color': 'g', 'pink_circle_pos': (-3, 3)},
      {'triangle_pos': (-3, -3), 'triangle_color': 'g', 'pink_circle_pos': (-4, 0)},
      {'triangle_pos': (-4, 0), 'triangle_color': 'g', 'pink_circle_pos': (3, -3)},
      {'triangle_pos': (-3, 3), 'triangle_color': 'g', 'pink_circle_pos': (3, 3)},
      {'triangle_pos': (0, 4), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, 3), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (4, 0), 'triangle_color': 'p', 'pink_circle_pos': 0.0},
      {'triangle_pos': (3, -3), 'triangle_color': 'p', 'pink_circle_pos': 0.0}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
    Routine trial
  LoopTerminator trials24
  Routine End_Page
