PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_3
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent circle1
      fillColor = white
      pos = $circle1_pos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle2
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MouseComponent mouse
      clickable = [circle1, circle2, triangle1, circle3, circle4, circle5, circle6, circle7]
      forceEndRoutineOnPress = correct click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        possible_positions = [(0, 4), (3, 3), (4, 0), (3, -3), (0, -4), (-3, -3), (-4, 0), (-3, 3)]
    PolygonComponent circle3
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle4
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle5
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle6
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent triangle1
      fillColor = white
      shape = triangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/prami/OneDrive/Desktop/Conditions_Spreadsheet.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('triangle_pos', '(0, 4)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(3, 3)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(4, 0)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(3, -3)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0, -4)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-3, -3)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-4, 0)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(-3, 3)'), ('triangle_color', 'g'), ('pink_circle_pos', 0.0)]),
      OrderedDict([('triangle_pos', '(0, 4)'), ('triangle_color', 'g'), ('pink_circle_pos', '(-3, -3)')]),
      OrderedDict([('triangle_pos', '(3, 3)'), ('triangle_color', 'g'), ('pink_circle_pos', '(0, -4)')]),
      OrderedDict([('triangle_pos', '(4, 0)'), ('triangle_color', 'g'), ('pink_circle_pos', '(0, 4)')]),
      OrderedDict([('triangle_pos', '(3, -3)'), ('triangle_color', 'g'), ('pink_circle_pos', '(4, 0)')]),
      OrderedDict([('triangle_pos', '(0, -4)'), ('triangle_color', 'g'), ('pink_circle_pos', '(-3, 3)')]),
      OrderedDict([('triangle_pos', '(-3, -3)'), ('triangle_color', 'g'), ('pink_circle_pos', '(-4, 0)')]),
      OrderedDict([('triangle_pos', '(-4, 0)'), ('triangle_color', 'g'), ('pink_circle_pos', '(3, -3)')])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
    Routine trial
  LoopTerminator trials
